'CR6 Series Datalogger
'program name:     mar-cssd.cr6             (maintenance mode version)
'program author:   Steven A. Marquie
'date:             9 Jan 2023
'
'info:             data logger program ID code: [stid]-[1][2][3][4][5].[prg]: where:
'                     [stid]...station id:         [mar]   (marshfield)
'                        [1]...state               [a]     (a=N/A,    b=MI,    c=WI)
'                        [2]...soil                [a]     (a=CS615,  b=CS616, s=SDI12 [CS650])
'                        [3]...air temp/rh         [a]     (a=HMP45C, b=HC2S3, c=HMP155A, s=SDI12 [HygroVue10])
'                        [4]...site type           [a]     (a=3m,    b=10m, c=1.5m)
'                        [5]...extra sensors       [ ]     ([]=none)
'                      [prg]...suffix/logger type  [cr6]   (cr6=CR6)
'
'
'logger program:   mar-aaaa.cr6                    (mar / WI /CS650 / HygroVue10 / 3m / no extra sensors)
'version 1A_2023
'extra sensors:    none
'
'comments:
'                  SDI-12 Instructions based on sample code provided by CSI (B. Banham)
'                  Program assumes modem is powered-on continuously
'                  Canopy Leaf Wetness should be in use... if not, please use alternate program to mask data as "NAN"
'
'       Line 600:  Program makes use of "SlowSequence" to correct issues with "skipped scans"... 05-second scan for Air Temperature and Solar Radiation
'       Line 678:  Program makes use of "SlowSequence" to correct issues with "skipped scans"... 60-second scan for Soil Sensors
'
'       Line 110:  Set "LW_Canopy_mV" variable to "NAN"... used within output to "Public" table 
'       Line 111:  Set "LW_Canopy_mV_Avg" variable to "NAN"... used within output to "Table05" table
'       Line 112   Set "LW_Canopy_mV_Hst" variable to "NAN"... used within output to "Table60" table
'       Line 505:  Disable canopy leaf wetness code
'
'       Line 560:  Maintenance Mode Checks  (do not process Data Tables if MaintMode is set to "true")
'
'       Line 090:  LWET set to 280          (Leaf wetness wet/dry cutoff set to 280mv)
'       Line 091:  MAIN_SCAN set to 3       (Primary Program Scan Rate set to 3-seconds)
'       Line 092:  SUB_SCAN1 set to 5       (SlowSequence Scan Rate of 05-seconds... used for Solar Radiation)
'       Line 093:  SUB_SCAN2 set to 60      (SlowSequence Scan Rate of 60-seconds... used for Soil Sensors)
'
'       Line 080:  MMWIN set to 3600        (Maximum Maintenance Window Set to 3600 seconds [one hour])
'       Line 081:  SNUM set to 11011        (Station 011 of "WI" EnviroWX Network)
'
'------------------------------------------------------------------------------------------------------------------------------------------
'
'------------------------------------------------------------------------------------------------------------------------------------------
'Wiring Diagram:
'
'CR6      HygroVue10                        CR6        CS320
' G        Black                             G          Black
' G        Blue                              G          Blue
' C1       White                             G          Clear
' 12V      Brown                             C1         White (data)
'                                            12V        Red
'
'CR6      LWS_A                             CR6        LWS_B
' U1       White (VEx)                       U1         White (VEx)    [N/A]
' U2       Red (Signal)                      U3         Red (Signal)   [N/A]
' G        Bare (Gnd)                        G          Bare (Gnd)     [N/A]
'
'CR6      CS650s                            CR6        03002
' G        Black (Gnd)                       G          Black (Gnd)
' G        Clear (Shield)                    G          Clear (Shield)
' G        Orange                            G          White
' C3       Green (data)                      U1         Blue (VEx)
' 12V      Red                               U4         Green (Direction Signal)
'                                            U6         Red (Speed Signal)
'CR6       TE525
' G         White (Gnd)                     
' U5        Black (Signal)            
' G         Clear (Shield)
'
'------------------------------------------------------------------------------------------------------------------------------------------
'Declare Constants:
'
'   The following are station-specific:
'
'      MMWIN: maximum maintenance window    (maximum maintenance window [in seconds])
'      SNUM: station nummber [aabbb]        (aa: 10=Michigan, 11=Wisconsin, bbb=station id number)
'
Const MMWIN = 3600                          'Maximum Maintenance Windows (in seconds) [3600 = one hour] 
Const SNUM = 11011
'
'   The following are program constants and should not be modified
'
'      LWET:      leaf wetness - cutoff between wet/dry (e.g. 280 mV)
'      MAIN_SCAN: Primary Scan Rate, in seconds (e.g. 3)...    used for main program and most sensors
'      SUB_SCAN1: SlowSequence #1 Scan Rate, in seconds (e.g. 5)... used for solar radiation 
'      SUB_SCAN2: SlowSequence #2 Scan Rate, in seconds (e.g. 60)... used for slower sensors; used to improve "skipped scans"
'
Const LWET = 280
Const MAIN_SCAN = 3
Const SUB_SCAN1 = 5
Const SUB_SCAN2 = 60
'
'------------------------------------------------------------------------------------------------------------------------------------------
'Declare Variables and Units
'
Dim AirDewDif                               'Value used to store the difference between air temperature and dewpoint
Dim Htr                                     'CS320 Heater
'
Public Battery_V                            'Logger Battery Voltage
Public CS320_1(6)                           'CS320 Digital Thermopile Pyranometer (2-m)                      [SDI-12 sensor address "1"]
Public CS320_1_HtrCtrl As Boolean           'CS320 Heater Control Flag
Public CS650_0(6)                           'CS650 Water Content Reflectometer / Soil Temperature (05-cm)    [SDI-12 sensor address "0"]
Public CS650_1(6)                           'CS650 Water Content Reflectometer / Soil Temperature (10-cm)    [SDI-12 sensor address "1"]
Public CS650_2(6)                           'CS650 Water Content Reflectometer / Soil Temperature (20-cm)    [SDI-12 sensor address "2"]
Public CS650_3(6)                           'CS650 Water Content Reflectometer / Soil Temperature (50-cm)    [SDI-12 sensor address "3"]
Public CS650_4(6)                           'CS650 Water Content Reflectometer / Soil Temperature (100-cm)   [SDI-12 sensor address "4"]
Public CurrentTime(9)                       'Date/Time Info from Logger
Public HV10_0(4)                            'HygroVue10 Temperature/Relative Humidity Sensors (1.5m)         [SDI-12 sensor address "0"]
Public LW_Canopy_mV As String = "NAN"       'Leaf Wetness (LWS-L): Canopy [Sensor Not Available]  ("Public")
Public LW_Canopy_mV_Avg As String = "NAN"   'Leaf Wetness (LWS-L): Canopy [Sensor Not Available]  ("Table05")
Public LW_Canopy_mV_Hst As String = "NAN"   'Leaf Wetness (LWS-L): Canopy [Sensor Not Available]  ("Table60")
Public LW_Standard_mV                       'Leaf Wetness (LWS-L): Standard Mount
'Public LWMCon_Canopy                       'Leaf Wetness (LWS-L): Canopy (Minutes Sensor = Contaminated or Wet)
'Public LWMCon_Standard                     'Leaf Wetness (LWS-L): Standard (Minutes Sensor = Contaminated or Wet)
'Public LWMDry_Canopy                       'Leaf Wetness (LWS-L): Canopy (Minutes Sensor = Dry)
'Public LWMDry_Standard                     'Leaf Wetness (LWS-L): Standard Mount (Minutes Sensor = Dry)
'Public LWMWet_Canopy                       'Leaf Wetness (LWS-L): Canopy (Minutes Sensor = Wet)
'Public LWMWet_Standard                     'Leaf Wetness (LWS-L): Standard Mount (Minutes Sensor = Wet)     
Public PanelTemp_C                          'Logger Wiring Panel Temperature
Public Rain_mm                              'Precipitation
Public SolRad_kJ                            'Solar Radiation: Total Flux (kJ/m2/[scan_rate])
Public SolRad60_kJ                          'Solar Radiation: Total Flux (kJ/m2/min)
Public StationNum                           'Station Number
Public WindDir_3m                           'Wind Direction: 3m
Public WindSpd_ms_3m                        'Wind Speed: 3m
'
Public Main_Count                           'Test Counter for Outer Primary Loop 
Public SubScan1_Count                       'Test Counter For SubScan #1
Public SubScan2_Count                       'Test Counter For SubScan #2
'
' Maintenance Mode Variables - developed by S. Marquie
'
'   - to treat logger restarts as 'maintenance' event, set the "Table**_Enabled" 
'     boolean variables to "False" (ignore first hourly and daily entries after
'     logger restart), otherwise set to "True" (keep associated hourly and daily 
'     entries). 
'
'   - may want to define "Table**_Enabled" boolean variables as "Dim" to prevent 
'     from being displayed in Public table (and accidentally being toggled)
'
Public MaintMode As Boolean = False         'boolean flag used to control Maintenance Mode (T => enabled, F => disabled)
Dim    MaintCounter As Long = 0             'maintenance window counter... used to determine timeout for Maintenance Mode
Dim    VarDisabled As Boolean = False       'boolean flag used to determine if measurement is included in output saved to Data Table
'
Dim    Table05_Enabled As Boolean = False   'boolean flag used to control if Data Table "Table5" should be processed /output
Dim    Table24_Enabled As Boolean = False   'boolean flag used to control if Data Table "Table24" should be processed / output
Dim    Table60_Enabled As Boolean = False   'boolean flag used to control if Data Table "Table60" should be processed / output


Alias CS320_1(1)=SolRad_W                   'Solar Radiation: Flux Density (W/m2)
Alias CS320_1(2)=SolRad_Raw_mV              'Solar Radiation: Raw Sensor Data (mV)
Alias CS320_1(3)=CS320_1_Temp               'CS320 Pyronometer Sensor Temperature
Alias CS320_1(4)=CS320_1_X                  'CS320 Pyronometer Sensor Orientation: X-Axis
Alias CS320_1(5)=CS320_1_Y                  'CS320 Pyronometer Sensor Orientation: Y-Axis
Alias CS320_1(6)=CS320_1_Z                  'CS320 Pyronometer Sensor Orientation: Z-Axis
Alias CS650_0(1)=SoilMstr_5cm               'Soil Moisture (Volumetric Water Content): 5cm
Alias CS650_0(2)=SoilEC_5cm                 'Soil Electrical Conductivity: 5cm
Alias CS650_0(3)=SoilTemp_C_5cm             'Soil Temperature: 5cm
Alias CS650_0(4)=SoilBDP_5cm                'Soil Bulk Dielectric Permittivity: 5cm
Alias CS650_0(5)=SoilPA_5cm                 'Soil Period Average: 5cm
Alias CS650_0(6)=SoilVR_5cm                 'Soil Voltage Ratio: 5cm
Alias CS650_1(1)=SoilMstr_10cm              'Soil Moisture (Volumetric Water Content): 10cm
Alias CS650_1(2)=SoilEC_10cm                'Soil Electrical Conductivity: 10cm
Alias CS650_1(3)=SoilTemp_C_10cm            'Soil Temperature: 10cm
Alias CS650_1(4)=SoilBDP_10cm               'Soil Bulk Dielectric Permittivity: 10cm
Alias CS650_1(5)=SoilPA_10cm                'Soil Period Average: 10cm
Alias CS650_1(6)=SoilVR_10cm                'Soil Voltage Ratio: 10cm
Alias CS650_2(1)=SoilMstr_20cm              'Soil Moisture (Volumetric Water Content): 20cm
Alias CS650_2(2)=SoilEC_20cm                'Soil Electrical Conductivity: 20cm
Alias CS650_2(3)=SoilTemp_C_20cm            'Soil Temperature: 20cm
Alias CS650_2(4)=SoilBDP_20cm               'Soil Bulk Dielectric Permittivity: 20cm
Alias CS650_2(5)=SoilPA_20cm                'Soil Period Average: 20cm
Alias CS650_2(6)=SoilVR_20cm                'Soil Voltage Ratio: 20cm
Alias CS650_3(1)=SoilMstr_50cm              'Soil Moisture (Volumetric Water Content): 50cm
Alias CS650_3(2)=SoilEC_50cm                'Soil Electrical Conductivity: 50cm
Alias CS650_3(3)=SoilTemp_C_50cm            'Soil Temperature: 50cm
Alias CS650_3(4)=SoilBDP_50cm               'Soil Bulk Dielectric Permittivity: 50cm
Alias CS650_3(5)=SoilPA_50cm                'Soil Period Average: 50cm
Alias CS650_3(6)=SoilVR_50cm                'Soil Voltage Ratio: 50cm
Alias CS650_4(1)=SoilMstr_100cm              'Soil Moisture (Volumetric Water Content): 100cm
Alias CS650_4(2)=SoilEC_100cm                'Soil Electrical Conductivity: 100cm
Alias CS650_4(3)=SoilTemp_C_100cm            'Soil Temperature: 100cm
Alias CS650_4(4)=SoilBDP_100cm               'Soil Bulk Dielectric Permittivity: 100cm
Alias CS650_4(5)=SoilPA_100cm                'Soil Period Average: 100cm
Alias CS650_4(6)=SoilVR_100cm                'Soil Voltage Ratio: 100cm
Alias CurrentTime(9)=DayOfYear              'Current Day of Year
Alias HV10_0(1)=AirTemp_C                   'Air Temperature: 1.5m
Alias HV10_0(2)=RelHum                      'Relative Humidity: 1.5m
Alias HV10_0(3)=DewPointTemp_C              'Dew Point Temperature: 1.5m
Alias HV10_0(4)=VapourPressure              'Vapour Pressure: 1.5m
'
Units AirTemp_C=Deg C
Units Battery_V=Volts
Units CS320_1_Temp=C
Units CS320_1_X=deg
Units CS320_1_Y=deg
Units CS320_1_Z=deg
Units DewPointTemp_C=Deg C
Units LW_Canopy_mV=mV
Units LW_Canopy_mV_Avg=mV
Units LW_Canopy_mV_Hst=mV
Units LW_Standard_mV=mV
'Units LWMCon_Canopy=Minutes
'Units LWMCon_Standard=Minutes
'Units LWMDry_Canopy=Minutes
'Units LWMDry_Standard=Minutes
'Units LWMWet_Canopy=Minutes
'Units LWMWet_Standard=Minutes
Units PanelTemp_C=Deg C
Units Rain_mm=mm
Units RelHum=%
Units SoilBDP_5cm=unitless
Units SoilBDP_10cm=unitless
Units SoilBDP_20cm=unitless
Units SoilBDP_50cm=unitless
Units SoilBDP_100cm=unitless
Units SoilEC_5cm=dS/m
Units SoilEC_10cm=dS/m
Units SoilEC_20cm=dS/m
Units SoilEC_50cm=dS/m
Units SoilEC_100cm=dS/m
Units SoilMstr_5cm=m^3/m^3
Units SoilMstr_10cm=m^3/m^3
Units SoilMstr_20cm=m^3/m^3
Units SoilMstr_50cm=m^3/m^3
Units SoilMstr_100cm=m^3/m^3
Units SoilPA_5cm=nsec
Units SoilPA_10cm=nsec
Units SoilPA_20cm=nsec
Units SoilPA_50cm=nsec
Units SoilPA_100cm=nsec
Units SoilTemp_C_5cm=Deg C
Units SoilTemp_C_10cm=Deg C
Units SoilTemp_C_20cm=Deg C
Units SoilTemp_C_50cm=Deg C
Units SoilTemp_C_100cm=Deg C
Units SoilVR_5cm=unitless
Units SoilVR_10cm=unitless
Units SoilVR_20cm=unitless
Units SoilVR_50cm=unitless
Units SoilVR_100cm=unitless
Units SolRad_kJ=kJ/m2/[scan_rate]
Units SolRad_Raw_mV=mV
Units SolRad_W=W/m2
Units SolRad60_kJ=kJ/m2/min
Units VapourPressure=kPa
Units WindDir_3m=degrees from North
Units WindSpd_ms_3m=meters/sec
'
'------------------------------------------------------------------------------------------------------------------------------------------
'------------------------------------------------------------------------------------------------------------------------------------------
'Define Data Tables:   (Note: Array ID, date, and time info set within LoggerNet Settings)
'
'   NOTE: process Data Table only in "TableLogging" is set to "True"
'   NOTE: include measured data only if "VarDisabled" is set to "False"
'
'   --- Table5 (Five Minute Data) ---
'   Date/Time Info:        00-03
'   Standard Station Data: 04-10
'   Battery Voltage:       11
'   Station Number:        12
'   Extra Station Data:    n.a
'
'   00: Array ID (configured within LoggerNet Data Collection) 
'   01: Year (configured within LoggerNet Data Collection)
'   02: Day (configured within LoggerNet Data Collection)
'   03: Hour-Minute (configured within LoggerNet Data Collection)
'   04: Air Temperature [1.5m] (average)
'   05: Relative Humidity [1.5m] (average)
'   06: Dew Point Temperature [1.5m] (average)
'   07: Precipitation (total)
'   08: Leaf Wetness LWS Standard (average)
'   09: Leaf Wetness LWS Canopy (average)   [NOT AVAILABLE]
'   10: Wind Speed [3m] (average)
'   11: Battery Voltage (sample)
'   12: Station Number
'
DataTable(Table5, Table05_Enabled, -1)
    DataInterval(0, 5, Min, 10)
    Average(1, AirTemp_C, FP2, VarDisabled)     
    Average(1, RelHum, FP2, VarDisabled) 
    Average(1, DewPointTemp_C, FP2, VarDisabled)    
    Totalize(1, Rain_mm, FP2, VarDisabled)    
    Average(1, LW_Standard_mV, FP2, VarDisabled)
    Sample(1, LW_Canopy_mV_Avg, STRING)   
    Average(1, WindSpd_ms_3m, FP2, VarDisabled)
    Sample(1, Battery_V, FP2)       
    Sample(1, StationNum, UINT2)    
EndTable
'
'   --- Table60 (Hourly Data) ---
'   Date/Time Info:        00-03
'   Standard Station Data: 04-23
'   Battery Voltage:       24
'   Station Number:        25
'   Extra Station Data:    n.a
'
'   00: Array ID (configured within LoggerNet Data Collection) 
'   01: Year (configured within LoggerNet Data Collection)
'   02: Day (configured within LoggerNet Data Collection)
'   03: Hour-Minute (configured within LoggerNet Data Collection)
'   04: Air Temperature [1.5m] (average)
'   05: Relative Humidity [1.5m] (average)
'   06: Dew Point Temperature [1.5m] (average)
'   07: Precipitation (total)
'   08: Leaf Wetness LWS Standard (% hour wet)
'   09: Leaf Wetness LWS Canopy (% hour wet)   [NOT AVAILABLE]
'   10: Wind Speed [3m] (average)
'   11: Wind Direction [3m] (average)
'   12: Standard Deviation of Wind Direction [3m]
'   13: Wind Speed [3m] (maximum)
'   14: Wind Speed [3m] (time of occurrence: maximum)
'   15: Solar Radiation [2m] (total)
'   16: Soil Temperature [5cm] (average)
'   17: Soil Temperature [10cm] (average)
'   18: Soil Temperature [20cm] (average)
'   19: Soil Temperature [50cm] (average)    
'   20: Soil Moisture [5cm] (average)
'   21: Soil Moisture [10cm] (average)
'   22: Soil Moisture [20cm] (average)
'   23: Soil Moisture [50cm] (average)
'   24: Soil Moisture [100cm] (average)
'   25: Battery Voltage (average)
'   26: Station Number
'
DataTable(Table60, Table60_Enabled, -1)
    DataInterval(0, 60, Min, 10)
    Average(1, AirTemp_C, FP2, VarDisabled)     
    Average(1, RelHum, FP2, VarDisabled)   
    Average(1, DewPointTemp_C, FP2, VarDisabled)
    Totalize(1, Rain_mm, FP2, VarDisabled) 
    Histogram(LW_Standard_mV, FP2, VarDisabled, 1, 001, 1, LWET, 100000)
    Sample(1, LW_Canopy_mV_Hst, STRING)    
    WindVector(1, WindSpd_ms_3m, WindDir_3m, FP2, VarDisabled, 0, 0, 0)   
    Maximum(1, WindSpd_ms_3m, FP2, VarDisabled, True)    
    Totalize(1, SolRad_kJ, IEEE4, VarDisabled)        
    Average(1, SoilTemp_C_5cm, FP2, VarDisabled)
    Average(1, SoilTemp_C_10cm, FP2, VarDisabled) 
    Average(1, SoilTemp_C_20cm, FP2, VarDisabled)
    Average(1, SoilTemp_C_50cm, FP2, VarDisabled)
    Average(1, SoilTemp_C_100cm, FP2, VarDisabled)       
    Average(1, SoilMstr_5cm, FP2, VarDisabled)
    Average(1, SoilMstr_10cm, FP2, VarDisabled)   
    Average(1, SoilMstr_20cm, FP2, VarDisabled)
    Average(1, SoilMstr_50cm, FP2, VarDisabled)
    Average(1, SoilMstr_100cm, FP2, VarDisabled)        
    Average(1, Battery_V, FP2, VarDisabled)       
    Sample(1, StationNum, UINT2)
EndTable
'
'   --- Table24 (Daily Data) ---
'   Date/Time Info:        00-03
'   Standard Station Data: 04-53
'   Battery Voltage:       54-55
'   Station Number:        56
'   Extra Tower Data:      n.a
'
'   00: Array ID (configured within LoggerNet Data Collection) 
'   01: Year (configured within LoggerNet Data Collection)
'   02: Day (configured within LoggerNet Data Collection)
'   03: Hour-Minute (configured within LoggerNet Data Collection)
'   04: Air Temperature [1.5m] (maximum)
'   05: Air Temperature [1.5m] (time of occurrence: maximum)
'   06: Air Temperature [1.5m] (minimum)
'   07: Air Temperature [1.5m] (time of occurrence: minimum)
'   08: Relative Humidity [1.5m] (maximum)
'   09: Relative Humidity [1.5m] (time of occurrence: maximum)
'   10: Relative Humidity [1.5m] (minimum)
'   11: Relative Humidity [1.5m] (time of occurrence: minimum)
'   12: Dew Point Temperature [1.5m] (maximum)
'   13: Dew Point Temperature [1.5m] (time of occurrence: maximum)
'   14: Dew Point Temperature [1.5m] (minimum)
'   15: Dew Point Temperature [1.5m] (time of occurrence: minimum)
'   16: Precipitation (total)
'   17: Wind Speed [3m] (maximum)
'   18: Wind Speed [3m] (time of occurrence: maximum)
'   19: Solar Radiation [2m] (total)
'   20: Solar Radiation [2m] (maximum flux)
'   21: Solar Radiation [2m] (time of occurrence: maximum flux)
'   22: Soil Temperature [5cm] (maximum)
'   23: Soil Temperature [5cm] (time of occurrence: maximum)
'   24: Soil Temperature [5cm] (minimum)
'   25: Soil Temperature [5cm] (time of occurrence: minimum)
'   26: Soil Temperature [10cm] (maximum)
'   27: Soil Temperature [10cm] (time of occurrence: maximum)
'   28: Soil Temperature [10cm] (minimum)
'   29: Soil Temperature [10cm] (time of occurrence: minimum)
'   30: Soil Temperature [20cm] (maximum)
'   31: Soil Temperature [20cm] (time of occurrence: maximum)
'   32: Soil Temperature [20cm] (minimum)
'   33: Soil Temperature [20cm] (time of occurrence: minimum)
'   34: Soil Temperature [50cm] (maximum)
'   35: Soil Temperature [50cm] (time of occurrence: maximum)
'   36: Soil Temperature [50cm] (minimum)
'   37: Soil Temperature [50cm] (time of occurrence: minimum)
'   38: Soil Temperature [100cm] (maximum)
'   39: Soil Temperature [100cm] (time of occurrence: maximum)
'   40: Soil Temperature [100cm] (minimum)
'   41: Soil Temperature [100cm] (time of occurrence: minimum)
'   42: Soil Moisture [5cm] (maximum)
'   43: Soil Moisture [5cm] (time of occurrence: maximum)
'   44: Soil Moisture [5cm] (minimum)
'   45: Soil Moisture [5cm] (time of occurrence: minimum)
'   46: Soil Moisture [10cm] (maximum)
'   47: Soil Moisture [10cm] (time of occurrence: maximum)
'   48: Soil Moisture [10cm] (minimum)
'   49: Soil Moisture [10cm] (time of occurrence: minimum)
'   50: Soil Moisture [20cm] (maximum)
'   51: Soil Moisture [20cm] (time of occurrence: maximum)
'   52: Soil Moisture [20cm] (minimum)
'   53: Soil Moisture [20cm] (time of occurrence: minimum)
'   54: Soil Moisture [50cm] (maximum)
'   55: Soil Moisture [50cm] (time of occurrence: maximum)
'   56: Soil Moisture [50cm] (minimum)
'   57: Soil Moisture [50cm] (time of occurrence: minimum)
'   58: Soil Moisture [100cm] (maximum)
'   59: Soil Moisture [100cm] (time of occurrence: maximum)
'   60: Soil Moisture [100cm] (minimum)
'   61: Soil Moisture [100cm] (time of occurrence: minimum)
'   62: Battery Voltage (minimum)
'   63: Battery Voltage (time of occurrence: minimum)
'   64: Station Number
'
DataTable(Table24, Table24_Enabled, -1)
    DataInterval(0, 1440, Min, 10)
    Maximum(1, AirTemp_C, FP2, VarDisabled, True)
    Minimum(1, AirTemp_C, FP2, VarDisabled, True)  
    Maximum(1, RelHum, FP2, VarDisabled, True)
    Minimum(1, RelHum, FP2, VarDisabled, True) 
    Maximum(1, DewPointTemp_C, FP2, VarDisabled, True)
    Minimum(1, DewPointTemp_C, FP2, VarDisabled, True)
    Totalize(1, Rain_mm, FP2, VarDisabled)   
    Maximum(1, WindSpd_ms_3m, FP2, VarDisabled, True)      
    Totalize(1, SolRad_kJ, IEEE4, VarDisabled) 
    Maximum(1, SolRad60_kJ, FP2, VarDisabled, True)
    Maximum(1, SoilTemp_C_5cm, FP2, VarDisabled, True)
    Minimum(1, SoilTemp_C_5cm, FP2, VarDisabled, True)  
    Maximum(1, SoilTemp_C_10cm, FP2, VarDisabled, True)  
    Minimum(1, SoilTemp_C_10cm, FP2, VarDisabled, True) 
    Maximum(1, SoilTemp_C_20cm, FP2, VarDisabled, True)  
    Minimum(1, SoilTemp_C_20cm, FP2, VarDisabled, True) 
    Maximum(1, SoilTemp_C_50cm, FP2, VarDisabled, True)  
    Minimum(1, SoilTemp_C_50cm, FP2, VarDisabled, True)
    Maximum(1, SoilTemp_C_100cm, FP2, VarDisabled, True)  
    Minimum(1, SoilTemp_C_100cm, FP2, VarDisabled, True)    
    Maximum(1, SoilMstr_5cm, FP2, VarDisabled, True)
    Minimum(1, SoilMstr_5cm, FP2, VarDisabled, True)    
    Maximum(1, SoilMstr_10cm, FP2, VarDisabled, True)  
    Minimum(1, SoilMstr_10cm, FP2, VarDisabled, True) 
    Maximum(1, SoilMstr_20cm, FP2, VarDisabled, True)  
    Minimum(1, SoilMstr_20cm, FP2, VarDisabled, True) 
    Maximum(1, SoilMstr_50cm, FP2, VarDisabled, True)  
    Minimum(1, SoilMstr_50cm, FP2, VarDisabled, True)
    Maximum(1, SoilMstr_100cm, FP2, VarDisabled, True)  
    Minimum(1, SoilMstr_100cm, FP2, VarDisabled, True)        
    Minimum(1, Battery_V, FP2, VarDisabled, True)
    Sample(1, StationNum, UINT2)
EndTable
'
'------------------------------------------------------------------------------------------------------------------------------------------
'Define Subroutines
'Sub 
'      Enter Sub Instructions Here
'EndSub
'
'------------------------------------------------------------------------------------------------------------------------------------------
'Main Program
BeginProg

    Main_Count = 0
    SubScan1_Count = 0
    SubScan2_Count = 0

    '------------------------------------------------------------------------------------------------------------------
    'Main Scan
    '------------------------------------------------------------------------------------------------------------------       
    Scan(MAIN_SCAN, Sec, 1, 0)

        Main_Count = Main_Count + 1
        
        '----------------------------------------
        '--- set Station Number
        '----------------------------------------
        StationNum = SNUM        

        '----------------------------------------
        '--- determine Current Time
        '----------------------------------------
        RealTime(CurrentTime)

        '----------------------------------------------
        '--- determine CR6 Dataloger Battery Voltage
        '----------------------------------------------
        Battery(Battery_V)  

        '--------------------------------------------------------
        '--- determine CR6 Datalogger Wiring Panel Temperature
        '--------------------------------------------------------
        PanelTemp(PanelTemp_C, 60)

        '-----------------------------------------
        '--- measure Precipitation   (TE525)
        '-----------------------------------------
        PulseCount(Rain_mm, 1, U5, 1, 0, 0.254, 0) 

        '----------------------------------------
        '--- measure Leaf Wetness   (LWS-L)
        '----------------------------------------
        '---   - the "minutes-wet" and "minutes-dry" not currently used, but the code
        '---     provided by CSI will be incldued in case it is needed in the future.
        '---   - percent hour wet is computed using Histogram in Table Output using
        '---     cutoff value "LWET" determined by field team.
        '---
        '---   (1) Standard Leaf Wetness
        '---
        BrHalf(LW_Standard_mV, 1, mV5000, U2, U1, 1, 2500, False, 10000, 60, 2500, 0)
        'LWMCon_Standard = 0
        'LWMDry_Standard = 0
        'LWMWet_Standard = 0
        'If (LW_Standard_mV < 274) Then
        '    LWMDry_Standard = MAIN_SCAN / 60.0
        'Else
        '    If (LW_Standard_mV >= 284 ) Then
        '       LWMWet_Standard = MAIN_SCAN / 60.0
        '    Else
        '       LWMCon_Standard = MAIN_SCAN / 60.0
        '    EndIf
        'EndIf

        '---
        '---   (2) Canopy Leaf Wetness
        '---
        '---   this sensor is not currently being used or is not properly deployed... will report as "NAN"  
        '--- 
        LW_Canopy_mV = "NAN"                                                   ' Public table variable 
        LW_Canopy_mV_Avg = "NAN"                                               ' Table05 table variable
        LW_Canopy_mV_Hst = "NAN"                                               ' Table60 table variable
        
        '---------------------------------------
        '--- measure Wind Speed / Wind Direction
        '---------------------------------------
        '---
        '---   (1) Wind Speed / Wind Direction: 3m   (RM Young 3002)
        '---
        PulseCount(WindSpd_ms_3m, 1, U6, 5, 1, 0.75, 0.2)                           'mult=0.75, offset=0.2 => meters/sec (from ShortCut 4.4)
        If (WindSpd_ms_3m < 0.21) Then                                              'adjust for minimum/offset (from ShortCut 4.4)
            WindSpd_ms_3m = 0
        EndIf
        BrHalf(WindDir_3m, 1, mV5000, U4, U1, 1, 2500, True, 20000, 60, 352, 0)     'measurment range=mV5000, excitation voltage=2500mV, multiplier=352
        If (WindDir_3m >= 352 OR WindDir_3m < 0) Then                               'adjust for sensor 'dead zone' (from ShortCut 4.4)
            WindDir_3m = 0
        EndIf

        '----------------------------------------
        '--- Modem Control
        '----------------------------------------
        '---   - not needed... program assumes modem is powered "on" continuously
        '---        

        '---   - reset test counters
        If (TimeIntoInterval(0, 60, min)) Then
            Main_Count = 0
            SubScan1_Count = 0
            SubScan2_Count = 0
        EndIf


        '--------------------------------------------------------
        '--- Call Data Tables and Store/Output Data
        '--------------------------------------------------------

        '--- 
        '---   (1) process data tables
        '---
        '---       NOTE: may need to add checks to: 
        '---             (a) disable next five-minute entry after maintenance mode ends
        '---             (b) disable next hourly entry after maintenace mode ends 
        '---             (c) disable next daily entry after maintenance mode ends
        '---
        CallTable Table5                                                       'Five-Minute Output
        CallTable Table60                                                      'Hourly Output
        CallTable Table24                                                      'Daily Output        
        
        
        '---
        '---   (2) set data table processing flags (i.e. check for "maintenance mode"
        '---       - MaintMode = True  (enabled... process data tables)
        '---       - MaintMode = False (disabled... do not process data tables)
        '---
        '---         - added checks to: 
        '---             (a) disable next five-minute entry after maintenance mode ends
        '---             (b) disable next hourly entry after maintenace mode ends 
        '---             (c) disable next daily entry after maintenance mode ends        
        '---
        If (MaintMode = True) Then                                             'If "Maintenance Mode" is enabled (i.e. True)...
           MaintCounter = MaintCounter + 1                                     '...increment maintenance window counter by 1
           Table05_Enabled = False                                             '...during maintenance mode, do not process Data Table "Table5"
           Table60_Enabled = False                                             '...during maintenance mode, do not process Data Table "Table60"
           Table24_Enabled = False                                             '...during maintenance mode, do not process Data Table "Table24"
           VarDisabled = True                                                  '...during maintenance mode, do not include measurements in Data Table Commands           
           If (MaintCounter > MMWIN / MAIN_SCAN) Then                          '...once maintenance mode threshold has been reached (maintenance window / main scan rate)...
              MaintMode = False                                                '   ...reset boolean to disable "maintenance mode" and resume processing of data tables
           Endif           
        EndIf 
        
        If (MaintMode = False) Then                                            'If "Maintenance Mode" is disabled (i.e. False)...
           MaintCounter = 0                                                    '...keep maintenance windows counter at 0 (until in maintenance mode)

           If (TimeIntoInterval(0, 5, min)) Then
              Table05_Enabled = True                                           '...wait until next 05-minute period to re-enable 05-minute data table (if needed)
           Endif
           If (TimeIntoInterval(0, 60, min)) Then
              Table60_Enabled = True                                           '...wait until next 60-minute period to re-enable hourly data table (if needed)
           Endif
           If (TimeIntoInterval(0, 24, hr)) Then
              Table24_Enabled = True                                           '...wait until next 24-hour period to re-enable daily data table (if needed)
           Endif 
           
           VarDisabled = False           
        EndIf    
        
    NextScan

    
    '---------------------------------------------
    '--- Slow Sequence Scan #1   (e.g. 05 seconds)
    '---------------------------------------------
    '---
    '--- NOTE: The HygroVue10 and CS320 sensors needed to be moved into this SlowSequence as they are not able to 
    '---       respond properly within the main scan if it is set to be more frequent than a 05-second interval.
    '---
    '---       Typically, the Solar Flux is computed as: 
    '---       
    '---             SolarRad_kJ = SolarRad_W * SCAN_RATE / 1000
    '--- 
    '---       which in this SlowSequence would be:      
    '---    
    '---             SolarRad_kJ = SolarRad_W * SUB_SCAN1 / 1000
    '--- 
    '---       However, SolarRad_kJ is "Totalized" in the primary scan, so Campbell Scientific has suggested 
    '---       using the following as long as the Total is calculated within "CallTable" from the mail scan:
    '---
    '---             SolarRad_kJ = SolarRad_W * MAIN_SCAN / 1000  
    '---
    '---       Because this SlowSequence is not a multiple of the Primary Scan (5-sec vs 3-sec), there could 
    '---       be some slight error in calculating and outputing data results from within the Primary Scan, 
    '---       but Jason Ritter from Campbell Scientific suggests that the results from the HygroVue10 and 
    '----      CS320 would be negligible:
    '---
    '---             "There isn’t a better method than using slow sequence if you have to have some 
    '---              measurements happening at exact intervals... I don’t think you have any options 
    '---              other than SlowSequence for the slower sensors.
    '---     
    '---              ...if you could measure SolRad_W every 3 seconds and every 5 seconds, you would 
    '---              probably see negligible difference between the individual consecutive measurements. 
    '---              So you could assume that the reading taken in the slow sequence would be close 
    '---              enough to use as a 3 second reading (MAIN_SCAN) when calculating flux. That seems 
    '---              like the easiest fix to me for the CS320.
    '---
    '---              The same would probably be true of the HygraVue10"
    '---
    SlowSequence
    Scan(SUB_SCAN1, Sec, 3, 0)
    
        SubScan1_Count = SubScan1_Count + 1
 
        '----------------------------------------------------------------------------------------------
        '--- measure Standard Air Temp/Relative Humidity/Dew Point/Vapour Pressure   (SDI12: HygroVue10)
        '----------------------------------------------------------------------------------------------
        SDI12Recorder(HV10_0(), C1, "0", "M3!", 1, 0, -1)
 
        '---------------------------------------------------------
        '--- measure Solar Radiation and Pyranomter Heater Control
        '---------------------------------------------------------
        '---
        '---   (1) Solar Radiation   (SDI12: CS320 Digital Thermopile Pyranomter)
        '---
        SDI12Recorder(CS320_1(), C1, "1", "M4!", 1, 0, -1)
        If( SolRad_W < 0 )Then SolRad_W = 0                                    'Set negative solar radiation values to zero
        SolRad_kJ = SolRad_W * (MAIN_SCAN / 1000)                              'Total Flux: convert W/m2 to kJ/m2 for MAIN_SCAN execution interval (frequency in which total is calculated)
        SolRad60_kJ = SolRad_kJ * (60.0 / MAIN_SCAN)                           'Total Flux: adjust to 60-second rate (kJ/m2/min)      
        
        '---
        '---      (1a) Pyranometer Heater Control
        '---
        CS320_1_HtrCtrl = False                                                'CS320 Heater Control Flag
        'DewPoint(DewPointTemp_C, AirTemp_C, RelHum)                           'Calculate Dew Point... not needed if Dew Point already available
        AirDewDif = CS320_1_Temp - DewPointTemp_C                              'Calculate Spread Between Sensor Temperature and Dew Point

        If( CS320_1_Temp < 2 )Then CS320_1_HtrCtrl = True                      'if sensor temperature less than 2-C, turn heater ON
        If( AirDewDif < 2)Then CS320_1_HtrCtrl = True                          'if sensor temperature within 2-C of dewpoint, turn heater ON
        If( Battery_V < 11.7 )Then CS320_1_HtrCtrl = False                     'if logger battery drops below 11.7-V, turn heater OFF 

        If( CS320_1_HtrCtrl = True )Then
           SDI12Recorder(Htr, C1, "1", "XHON!", 1, 0)
        Else
           SDI12Recorder(Htr, C1, "1", "XHOFF!", 1, 0)
        Endif  
        
    NextScan    
    
    
    '---------------------------------------------
    '--- Slow Sequence Scan #2   (e.g. 60 seconds)
    '---------------------------------------------
    '---
    '--- NOTE: CS650 sensors were leading to some skipped scans when all were placed in the primary scan block, 
    '---       but since there is no need to sample soil data as frequently as the other sensors, they have been 
    '---       placed into this SlowSequence block definied by "SUB_SCAN2" (e.g. 60-seconds)
    '---    
    SlowSequence
    Scan(SUB_SCAN2, Sec, 3, 0)
    
        SubScan2_Count = SubScan2_Count + 1
        
        '--------------------------------------------
        '--- measure Soil Temperature / Soil Moisture
        '--------------------------------------------
        '---
        '---   (1) Soil Temperature / Soil Moisture: 05cm   (SDI12: CS650)
        '---       - "M4!" command reports all values
        '---       - "M3!" command includes logical tests built into OS
        '---
        SDI12Recorder(CS650_0(), C3, "0", "M3!", 1, 0, -1)

        '---
        '---   (2) Soil Temperature / Soil Moisture: 10cm   (SDI12: CS650)
        '---       - "M4!" command reports all values
        '---       - "M3!" command includes logical tests built into OS
        '---
        SDI12Recorder(CS650_1(), C3, "1", "M3!", 1, 0, -1)

        '---
        '---   (3) Soil Temperature / Soil Moisture: 20cm   (SDI12: CS650)
        '---       - "M4!" command reports all values
        '---       - "M3!" command includes logical tests built into OS
        '---
        SDI12Recorder(CS650_2(), C3, "2", "M3!", 1, 0, -1)

        '---
        '---   (4) Soil Temperature / Soil Moisture: 50cm   (SDI12: CS650)
        '---       - "M4!" command reports all values
        '---       - "M3!" command includes logical tests built into OS
        '---
        SDI12Recorder(CS650_3(), C3, "3", "M3!", 1, 0, -1)
        '---
        '---   (5) Soil Temperature / Soil Moisture: 100cm   (SDI12: CS650)
        '---       - "M4!" command reports all values
        '---       - "M3!" command includes logical tests built into OS
        '---
        SDI12Recorder(CS650_4(), C3, "4", "M3!", 1, 0, -1)
        
    NextScan
    
EndProg
'----------------------------------------------------------------------------------------------------------------------
